# Load material database FIRST
/gate/geometry/setMaterialDatabase /home/gv/SagarED20/gate/gate-source/GateMaterials.db

# 1. World Geometry
/gate/world/geometry/setXLength 1 m
/gate/world/geometry/setYLength 1 m
/gate/world/geometry/setZLength 1 m
/gate/world/setMaterial Air
/gate/geometry/rebuild

# 2. Initialize Visualization (BEFORE physics)
/vis/open OGL  # Requires OpenGL support (use "OGLIX" if on SSH/X11)

#/vis/open HepRepFile
#/vis/heprep/setFileDir ./vis_output

/vis/drawVolume
/vis/viewer/set/viewpointThetaPhi 60 30  # Camera angle
/vis/viewer/zoom 2
/vis/scene/add/trajectories smooth    # Draw particle paths
/vis/scene/add/hits                   # Show interaction points

/vis/viewer/set/autoRefresh 0           # Critical for file-based visualization

/vis/scene/endOfEventAction accumulate 10  # Update every 10 events

# 3. Physics List
/gate/physics/addPhysicsList QGSP_BIC_EMY

# ------------------------------
# 1. Add Phantom (Water Cylinder)
# ------------------------------
/gate/world/daughters/name phantom
/gate/world/daughters/insert cylinder
/gate/phantom/setMaterial Water
/gate/phantom/geometry/setRmin 0 cm
/gate/phantom/geometry/setRmax 5 cm
/gate/phantom/geometry/setHeight 10 cm
/gate/phantom/placement/setTranslation 0 0 0 cm
/gate/phantom/placement/setRotationAxis 0 1 0
/gate/phantom/placement/setRotationAngle 0 deg
/gate/phantom/vis/setColor blue

# ------------------------------
# 2. Add Detector (Flat Panel)
# ------------------------------
/gate/world/daughters/name detector
/gate/world/daughters/insert box
/gate/detector/setMaterial Silicon
/gate/detector/geometry/setXLength 10 cm
/gate/detector/geometry/setYLength 10 cm
/gate/detector/geometry/setZLength 1 mm
/gate/detector/placement/setTranslation 0 0 15 cm
/gate/detector/vis/setColor green

# Make detector sensitive
#/gate/detector/setSensitiveDetector SD


# 5. Source Configuration (Short test)
/gate/source/addSource mySource gps
/gate/source/mySource/gps/particle gamma
/gate/source/mySource/gps/energy 100 keV
/gate/source/mySource/gps/type Point
/gate/source/mySource/gps/centre 0 0 0 cm
/gate/source/mySource/setActivity 1e3 Bq  # Low activity for visualization

# 4. Initialize Run
/gate/run/initialize

# 6. Verbose Tracking (See particle steps)
/tracking/verbose 1  # 0=quiet, 1=basic, 2=detailed

# 7. Run Parameters (Very short run)
/gate/application/setTimeStart 0 s
/gate/application/setTimeStop 10 s  # ~10 events
/gate/application/startDAQ

