# 1. Load Material Database
/gate/geometry/setMaterialDatabase /home/gv/SagarED20/gate/gate-source/GateMaterials.db

# 2. World Geometry
/gate/world/geometry/setXLength 1 m
/gate/world/geometry/setYLength 1 m
/gate/world/geometry/setZLength 1 m
/gate/world/setMaterial Air
/gate/geometry/rebuild

# 3. Physics List
/gate/physics/addPhysicsList QGSP_BIC_EMY

# 4. Initialize
/gate/run/initialize

# 5. Source (Updated GPS Syntax)
/gate/source/addSource mySource gps
/gate/source/mySource/gps/particle gamma
/gate/source/mySource/gps/energy 511 keV
/gate/source/mySource/gps/pos/type Point
/gate/source/mySource/gps/pos/centre 0 0 0 cm
/gate/source/mySource/setActivity 1e3 Bq

# 6. Output Actor
/gate/actor/addActor DoseActor myDoseActor
/gate/actor/myDoseActor/attachTo world
/gate/actor/myDoseActor/save output.mhd

# 7. Run
/gate/application/setTimeStart 0 s
/gate/application/setTimeStop 0.1 s
/gate/application/startDAQ
